PsychoPy2experiment version="2021.1.4"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=2B8BE85A
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = XB270H
  Resources = ['images\\sample-display.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = steertheship
  logging level = debug
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Routines
  Routine trial
    CodeComponent trialMath
      Code Type = Both
      Before Experiment:
        def my_max(x):
            return max(x)

        def myShuffle(array):
            shuffle(array)
            return array

        def addElement(x,elem):
            #print('addElement(' + str(x) + ',' +  str(elem) + ')');
            if isinstance(elem,list):
                #print('isinstance passed')
                for elem in elem:
                    x.append(elem)
            else:
                x.append(elem)

        def rad2deg(rad):
            return rad * (180/pi)

        def deg2rad(deg):
            return deg * (pi/180)

        def getRand():
            return random()

        def getGauss():
            rand = 0
            i = 0
            while i  < 6:
                rand += random()
                i += 1
            return rand / 6

        def listSum (thisList):
            total = 0
            for i in thisList:
                total += i
            return total

        def makeBoundedWalk (bound):
            theseRands = [0]
            while len(theseRands) < 3600:
                nextRand = (random()-0.5)
                # use Math.random() in js
                test = theseRands[len(theseRands)-1] + nextRand
                while test < -bound or test > bound:
                    nextRand = (random()-0.5)
                    test = theseRands[len(theseRands)-1] + nextRand
                # theseRands += [theseRands[len(theseRands)-1] + nextRand]
                theseRands.append(theseRands[len(theseRands)-1] + nextRand)
                # need to use .push() in js
            return theseRands
      Before JS Experiment:
        function my_max(x) {
            return Math.max(...x);
        }

        function myShuffle(array) {
          for(let i = array.length - 1; i > 0; i--) {
            const j = Math.floor(Math.random() * i);
            const temp = array[i];
            array[i] = array[j];
            array[j] = temp;
          }
          return array;
        }

        function addElement(x, elem) {

            if (Array.isArray(elem)) {
                for(let i = 0; i < elem.length; i++) {
                    x.push(elem[i]);
                }
            } else {
                x.push(elem)
            }

        }

        function rad2deg(rad) {
            return (rad * (180 / pi));
        }
        function deg2rad(deg) {
            return (deg * (pi / 180));
        }
        function getRand() {
            return Math.random();
        }

        function getGauss() {
          var rand = 0;

          for (var i = 0; i < 6; i += 1) {
            rand += Math.random();
          }

          return rand / 6;
        }

        function listSum(thisList) {
            var total;
            total = 0;
            for (var i, _pj_c = 0, _pj_a = thisList, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                total += i;
            }
            return total;
        }
        function makeBoundedWalk(bound) {
            var nextRand, test, theseRands;
            theseRands = [0];
            while ((theseRands.length < 3600)) {
                nextRand = (0.5 * (Math.random() - 0.5));
                test = (theseRands[(theseRands.length - 1)] + nextRand);
                while (((test < (- bound)) || (test > bound))) {
                    nextRand = (0.5 * (Math.random() - 0.5));
                    test = (theseRands[(theseRands.length - 1)] + nextRand);
                }
                // theseRands += [(theseRands[(theseRands.length - 1)] + nextRand)];
                theseRands.push(theseRands[(theseRands.length - 1)] + nextRand);
            }
            return theseRands;
        }
    CodeComponent trialCode
      Code Type = Auto->JS
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      Before Experiment:
        def rgbToOther( rgb ):
            other = [-1 + 2*rgb[0]/255,-1 + 2*rgb[1]/255,-1 + 2*rgb[2]/255]
            return other

        def cart_pole( action,x,x_dot,theta,theta_dot, Tau, Length, Force_Mag ):
            g=9.8/10                     #Gravity
            Mass_Cart=1.0      #Mass of the cart is assumed to be 1Kg
            Mass_Pole=0.1      #Mass of the pole is assumed to be 0.1Kg
            Total_Mass=Mass_Cart+Mass_Pole
            PoleMass_Length=Mass_Pole*Length
            Fourthirds=1.3333333

            if action == 0:
                force = Force_Mag
            elif action>0:
                force=Force_Mag
            else:
                force=-Force_Mag

            temp = (force + PoleMass_Length *theta_dot * theta_dot * sin(theta))/ Total_Mass;

            thetaacc = (g * sin(theta) - cos(theta)* temp)/ (Length * (Fourthirds - Mass_Pole * cos(theta) * cos(theta) / Total_Mass));

            xacc  = temp - PoleMass_Length * thetaacc* cos(theta) / Total_Mass;

            # Update the four state variables, using Euler's method.
            x=x+Tau*x_dot;
            x_dot=x_dot+Tau*xacc;
            theta=theta+Tau*theta_dot;
            theta_dot=theta_dot+Tau*thetaacc;

            return [x,x_dot,theta,theta_dot]
      Begin Experiment:
        # Flag to determine rotational direction (1 for Python, -1 for JS)
        # (differs in JS versus Psychopy)
        rotationDir = 1
        testString = ''

        #Time interval for updating the values
        easyTau = 0.016666666
        easyTau = easyTau/2
        easyLength = 0.5

        # Task variables
        maxExperimentTime = 20 * 60 # 30 min, in seconds; changed to 20 min. on 13 May 2021
        totalExperimentTime = 0
        maxPoints = 250
        trialLengthSeconds = 60 # in seconds
        trialLengthFrames = trialLengthSeconds/frameDur
        limRad = pi/2
        limDeg = 90

        # Make block types in pseudorandom order
        # Limiting factor will be time though - just need to make sure we have plenty of blocks
        # Block types 0: control, 1: env noise, 2: motor noise, 3: env+motor noise
        allBlocks = [0,1,2,3] # Al block types, to be shuffled
        blockTypes = [0,0,0] # Start with three easy blocks
        i = 0
        while i < 50:
            addElement(blockTypes,myShuffle(allBlocks))
            i += 1
        numBlocks = len(blockTypes)
        blockNumber = 0
        print(blockTypes)
        print(numBlocks)

        # Mean actions per trial
        numControlBlocks = 0
        actionRateThisRound = 0
        meanActionRate = 0

        # Angle update variables - need to declare so JS doesn't complain
        delta = 0
        randI = 0

        # Feedback variables
        bestScore = 0
        allScores = []
        totalPoints = 0
        pointsThisRound = 0
        scaledPointsThisRound = 0
        pointsString = ''
        feedbackString = ''
        cueString = ''
        crashed = False
        pointsBarWH = [0.2, 0.01]
        pointsBarTotalWH = [0, 0.01]

        # Action/force variables
        participantAction = 0
        computerAction = 0
        participantForceMag = 0
        computerForceMag = 0
        actualAction = 0
        actualForceMag = 0

        # Solid circle variables (unused - delete)
        circleR = 0.1
        circleWH = [circleR, circleR]

        # Needle variables
        needleDeg = 0

        # Target variables
        targetDeg = 0
        targetRad = 0
        targetXY = [0,0]
        tracerXY = [0,0]
        closenessToTarget = 0

        # Stimulus variables
        stimColour = [1,1,1]
        easyColour = rgbToOther([27,158,119])
        hardColour = rgbToOther([117,112,179])
        thisNeedleColour = rgbToOther([200,200,200])
        needleTargetColour = rgbToOther([228,26,28])
        targetColour = rgbToOther([244,165,130])
        pointTotalColour = rgbToOther([244,165,130])

        allColours = [[-0.19216,-1,-0.89804],
        [-0.15294,-0.98431,-0.8902],
        [-0.12157,-0.97647,-0.8902],
        [-0.090196,-0.96078,-0.8902],
        [-0.05098,-0.95294,-0.88235],
        [-0.027451,-0.9451,-0.88235],
        [0.0039216,-0.93725,-0.87451],
        [0.035294,-0.92941,-0.87451],
        [0.066667,-0.92157,-0.86667],
        [0.090196,-0.91373,-0.86667],
        [0.11373,-0.91373,-0.85882],
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        [0.99216,0.73333,0.60784]]
      Begin Routine:
        thisBlockType = blockTypes[blockNumber]
        trials.addData('blockNumber', blockNumber)
        trials.addData('thisBlockType', thisBlockType)
        trials.addData('meanActionRate',meanActionRate)

        # Set trial parameters
        thisTau = easyTau # size of timestep
        thisLength = easyLength # length of pole
        # rWalk = hardWalk # which random walk to follow (sensory noise)
        # rWalk = makeBoundedWalk(10)

        # Reset feedback variables
        pointsThisRound = 0
        scaledPointsThisRound = 0
        crashed = False
        pointsBarTotalWH[0] = 0

        # Key presses
        numKeyPresses = 0

        # Target properties
        targetDeg = -90 + 180 * getRand()
        targetRad = deg2rad(targetDeg)
        targetX = circleR * sin(targetRad)
        targetY = circleR * cos(targetRad)
        targetXY = [targetX, targetY]

        # Starting state is (0 0 0 0)
        x         = 0       # cart position, meters
        x_dot     = 0       # cart velocity
        if getRand() < 0.5:
            theta = deg2rad(-1)
        else:
            theta = deg2rad(1)
        Force_Mag = 0       # actual force applied to cart
        participantForceMag = 0
        computerForceMag = 0
        theta_dot = 0.0
        participantAction = 0
        action = 0 # -1 for left, 1 for right, 0 for no action
        computerAction = 0
        trials.addData('initThetaDot', theta_dot)
        frameCount = 0

        # Action/force variables
        participantAction = 0
        computerAction = 0
        participantForceMag = 0
        computerForceMag = 0
        actualAction = 0
        actualForceMag = 0

        # Action/force variables
        participantActions = []
        computerActions = []
        participantForceMags = []
        computerForceMags = []
        actualActions = []
        actualForceMags = []

        # State variables (will append a value each frame)
        thetas = []
        thetaDots = []
        vs = []
        actions = []
        computerActions = []
        forceMags = []
        computerForceMags = []
        buttonPressTriggers = []
        buttonPressTimes = []

        # Initialize things so JS doesn't complain
        pointsThisFrame = 0
        iColour = 0
      Each Frame:
        # Initialize action/force variables
        participantAction = 0
        computerAction = 0
        participantForceMag = 0
        computerForceMag = 0
        actualAction = 0
        actualForceMag = 0

        # Store the state
        addElement(thetas,theta)
        addElement(thetaDots,theta_dot)
        addElement(vs,x_dot)

        # Update key durations (to be stored at end of routine)
        if len(_key_resp_allKeys):
            key_resp.duration = [key.duration for key in _key_resp_allKeys]

        triggerSent = 0
        # Participant action?
        if len(_key_resp_allKeys) and (len(key_resp.keys) != numKeyPresses):
            keyPressed = True
            lastKey = key_resp.keys[-1]
            if lastKey == 'f' or lastKey == 'left':
                participantAction = 1
                thisTrigger = leftTrigger
            elif lastKey == 'j' or lastKey == 'right':
                participantAction = -1
                thisTrigger = rightTrigger
            numKeyPresses += 1
            addElement(buttonPressTriggers,thisTrigger)
            addElement(buttonPressTimes,t)
            trialPort.setData(int(thisTrigger))
            win.callOnFlip(trialPort.setData, int(0))

        # Computer action?
        if participantAction == 0 and thisBlockType in [1,3]:
            if getRand() < meanActionRate:
                if theta < 0:
                    computerAction = -rotationDir
                    thisTrigger = compRightTrigger
                else:
                    computerAction = rotationDir
                    thisTrigger = compLeftTrigger
                addElement(buttonPressTriggers,thisTrigger)
                addElement(buttonPressTimes,t)
                trialPort.setData(int(thisTrigger))
                win.callOnFlip(trialPort.setData, int(0))

        # Choose which action to use and compute force magnitude
        if participantAction != 0: # Active
            if thisBlockType in [0,1]: # low motor noise
                participantForceMag = 10.0
            elif thisBlockType in [2,3]: # high motor noise
                participantForceMag = 20.0 * getGauss() # approx. gaussian 0-20
            actualForceMag = participantForceMag
            actualAction = participantAction
            testString = str(actualAction) + ', ' + str(actualForceMag)

        elif thisBlockType in [1,3]: # Wind
            if computerAction == 0:
                actualForceMag = participantForceMag
                actualAction = participantAction
            else:
                computerForceMag = 20.0 * getGauss()
                actualForceMag = computerForceMag
                actualAction = computerAction
                testString = str(actualAction) + ', ' + str(actualForceMag)

        # Update state
        [x,x_dot,theta,theta_dot]=cart_pole(actualAction,x,x_dot,theta,theta_dot,thisTau,thisLength, actualForceMag)

        # Update action/force arrays
        addElement(participantActions,participantAction)
        addElement(participantForceMags,participantForceMag)
        addElement(computerActions,computerAction)
        addElement(computerForceMags,computerForceMag)
        addElement(actualActions,actualAction)
        addElement(actualForceMags,actualForceMag)

        # Set needle angle with offset targetDeg
        needleDeg = rotationDir * (targetDeg + theta * (180/pi))

        # End trial?
        if abs(theta) > limRad:
            continueRoutine=False
            crashed = True
        elif t > trialLengthSeconds:
            continueRoutine=False
        else:
            closenessToTarget = (pi/2 - abs(theta))/(pi/2) # 0-1
            closenessToTarget = closenessToTarget * closenessToTarget # squared
            pointsThisRound += closenessToTarget
            iColour = round(closenessToTarget * (len(allColours)-1)) # convert to index
            targetColour = allColours[int(iColour)] # set target colour

        frameCount += 1
      End Routine:
        # Points calculation
        scaledPointsThisRound = (pointsThisRound/frameCount) * (t/trialLengthSeconds) * maxPoints
        #print('pointsThisRound ' + str(pointsThisRound))
        #print('frameCount ' + str(frameCount))
        #print('t ' + str(t))
        #print('trialLengthSeconds ' + str(trialLengthSeconds))
        #print('maxPoints ' + str(maxPoints))
        #print('scaledPointsThisRound ' + str(scaledPointsThisRound))

        # Store key durations
        # YOU MUST SET waitRelease = True IN getKeys CALL FOR THIS TO WORK
        if hasattr(key_resp,'duration'):
            trials.addData('key_resp.duration', key_resp.duration)

        # Store state
        trials.addData('targetDeg',targetDeg)
        trials.addData('thetas', thetas)
        trials.addData('thetaDots', thetaDots)
        trials.addData('vs', vs)

        # Store action/force
        trials.addData('participantActions', participantActions)
        trials.addData('participantForceMags', participantForceMags)
        trials.addData('computerActions', computerActions)
        trials.addData('computerForceMags', computerForceMags)
        trials.addData('actualActions', actualActions)
        trials.addData('actualForceMags', actualForceMags)
        trials.addData('buttonPressTriggers',buttonPressTriggers)
        trials.addData('buttonPressTimes',buttonPressTimes)

        # Store end-of-trial stuff
        trials.addData('frameCount', frameCount)
        trials.addData('steeringTime', t)
        trials.addData('crashed',crashed)
        trials.addData('pointsThisRound', pointsThisRound)
        trials.addData('scaledPointsThisRound', scaledPointsThisRound)

        if crashed:
            feedbackString = 'crash!'
        else:
            feedbackString = 'success!'

        if scaledPointsThisRound > bestScore:
            bestScore = scaledPointsThisRound

        addElement(allScores, scaledPointsThisRound)
        print(str(scaledPointsThisRound))
        print(str(allScores))
        totalPoints += scaledPointsThisRound
        pointsString = 'this round: ' + str(round(scaledPointsThisRound))
        # pointsString += '\nhigh score: ' + str(round(bestScore))
        pointsString += '\n\n(press the spacebar to start the next round)'

        blockNumber += 1

        # Update mean number of actions and action probability
        # Only include responses in control block (but could include all)
        if thisBlockType in [0]:
            numControlBlocks += 1
            actionRateThisRound = numKeyPresses/frameCount # TODO: check for /0
            meanActionRate = ((numControlBlocks - 1) / numControlBlocks)*meanActionRate + (1/numControlBlocks)*actionRateThisRound

        print('trial t ' + str(t))
        thisTrialTime += t
    ParallelOutComponent trialPort
      address = 0xD050
      startData = startTrigger
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.002
      syncScreen = True
      syncScreenRefresh = True
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    KeyboardComponent key_resp
      allowedKeys = 'f','j','left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    PolygonComponent circle
      fillColor = $[0,0,0]
      nVertices = 256
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent target
      fillColor [set every frame] = $targetColour
      nVertices = 16
      pos [set every repeat] = targetXY
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent needle
      fillColor = $thisNeedleColour
      ori [set every frame] = needleDeg
      shape = triangle
      size = (0.02, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent points_bar
      disabled = True
      fillColor = $[1,1,1]
      pos = (0, -0.2)
      shape = rectangle
      size [set every repeat] = $pointsBarWH
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent points_bar_total
      disabled = True
      fillColor = $[0.94,0.54,0.38]
      pos = (0, -0.2)
      shape = rectangle
      size [set every frame] = $pointsBarTotalWH
      startVal [time (s)] = 0.0
      units = height
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    TextComponent testText
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $testString
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  Routine feedback
    CodeComponent feedbackCode
      Code Type = Auto->JS
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      Begin Experiment:
        feedbackTrigger = 0
      Begin Routine:
        if crashed:
            feedbackTrigger = crashTrigger
        else:
            feedbackTrigger = successTrigger
      End Routine:
        thisTrialTime += t


        # Make a record of the feedback trigger
        if crashed:
            trials.addData('feedbackTrigger', crashTrigger)
        else:
            trials.addData('feedbackTrigger',successTrigger)
    ParallelOutComponent feedbackPort
      address = 0xD050
      startData = feedbackTrigger
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.002
      syncScreen = True
      syncScreenRefresh = True
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    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $feedbackString
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  Routine intructions2
    ImageComponent instruct2Image1
      image = images/sample-display-1.png
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instruct2Image2
      image = images/sample-display-2.png
      pos = (0.25, 0)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent instructions2Text
      letterHeight = 0.02
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press 'f' or 'j' to begin the experiment
      units = height
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    KeyboardComponent instructions2Key
      allowedKeys = 'f','j','left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine infoSheet2
    TextComponent infoSheet2Text
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Do I have to take part?
        Please note that your participation is voluntary. If you do decide to take part, you may withdraw at any point during the questionnaire for any reason before submitting your answers by closing the browser.

        How will my data be used?
        Your answers will be completely anonymous and we will take all reasonable measures to ensure that they remain confidential.
        Your data will be stored in a password-protected file and may be used in academic publications. Your IP address will not be stored. Research data will be stored for a minimum of five years after publication or public release.

        Who will have access to my data?
        Pavlovia is the data controller with respect to your personal data and, as such, will determine how your personal data is used.  Please see their privacy notice here: https://pavlovia.org/docs/home/ethics. Pavlovia will share only fully anonymised data with the University of Oxford, for the purposes of research.
        We would also like your permission to use your anonymised data in future studies, and to share data with other researchers (e.g. in online databases). Any personal information that could identify you will be removed or changed before files are shared with other researchers or results are made public.
        Responsible members of the University of Oxford and funders may be given access to data for monitoring and/or audit of the study to ensure we are complying with guidelines, or as otherwise required by law.
        The Principal Researcher is Dr. Cameron Hassall, a postdoctoral researcher who is attached to the Department of Psychiatry at the University of Oxford. This project is being completed under the supervision of Dr. Laurence Hunt.
        This project has been reviewed by, and received ethics clearance through, the University of Oxford Central University Research Ethics Committee [R67699/RE001].

        Who do I contact if I have a concern about the study or I wish to complain?
        If you have a concern about any aspect of this study, please speak to Cameron Hassall, cameron.hassall@psych.ox.ac.uk, or their supervisor Dr. Laurence Hunt, laurence.hunt@psych.ox.ac.uk, and we will do our best to answer your query. We will acknowledge your concern within 10 working days and give you an indication of how it will be dealt with.  If you remain unhappy or wish to make a formal complaint, please contact the Chair of the Medical Sciences Interdivisional Research Ethics Committee at the University of Oxford who will seek to resolve the matter as soon as possible:
        Email: ethics@medsci.ox.ac.uk; Address: Research Services, University of Oxford, Wellington Square, Oxford OX1 2JD
        The Chair will seek to resolve the matter in a reasonably expeditious manner.

        (press the spacebar to go to consent page)
    KeyboardComponent infoSheet2Key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine infoSheet1
    TextComponent infoSheet1Text
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Behavioural studies of decision-making and action selection
        Ethics Approval Reference R67699/RE001

        General Information
        The aim of this study is to investigate how people make decisions and select actions.
        We appreciate your interest in participating in this online task. You have been invited to participate as you are healthy, over 18 years of age, fluent English speaking and you do not have a diagnosis of a neurological or psychological condition. Please read through this information before agreeing to participate by ticking the ‘yes’ box below.
        You may ask any questions before deciding to take part by contacting the researcher (details on next page).
        We researchers from the Department of Psychiatry at the University of Oxford are investigating decision-making and action selection.
        In the task, you will be shown visual stimuli on the screen which you will be asked to pay attention to. You will be asked to make choices between them based on physical features and to respond by using the keyboard. After responding to the stimuli, you may receive some feedback about your performance. The number of points you earn in the task is directly related to the amount of bonus payment you will receive. This experiment will last around 30 minutes.

        (press the spacebar to go to next page)
    KeyboardComponent infoSheet1Key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions3
    TextComponent instr2Text
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        You will be steering two types of ship, in two types of weather. You will be told the ship and weather type before each round.

        Ships
        STABLE ships have consistent steering.
        UNSTABLE ships have inconsistent steering.

        Weather
        In CALM weather, the ship's position only depends on your steering.
        In WINDY weather, wind sometimes pushes the ship left or right.

        Press the spacebar to start playing
    KeyboardComponent instr2Key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cue
    CodeComponent cueCode
      Code Type = Auto->JS
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      Begin Experiment:
        thisTrialTime = 0

        # Triggers
        baseCueTrigger = 1
        baseStartTrigger = 11
        baseLeftTrigger = 21
        baseRightTrigger = 31
        baseCompLeftTrigger = 41
        baseCompRightTrigger = 51
        baseCrashTrigger = 61
        baseSuccessTrigger = 71
        basePointsTrigger = 81
      Begin Routine:
        thisTrialTime = 0

        thisBlockType = blockTypes[blockNumber]

        # Set triggers for this round
        cueTrigger = baseCueTrigger + thisBlockType
        startTrigger = baseStartTrigger + thisBlockType
        leftTrigger = baseLeftTrigger + thisBlockType
        rightTrigger = baseRightTrigger + thisBlockType
        compLeftTrigger = baseCompLeftTrigger + thisBlockType
        compRightTrigger = baseCompRightTrigger + thisBlockType
        crashTrigger = baseCrashTrigger + thisBlockType
        successTrigger = baseSuccessTrigger + thisBlockType
        pointsTrigger = basePointsTrigger + thisBlockType

        if thisBlockType == 0:
            cueString = 'STABLE ship\nCALM weather'
        elif thisBlockType == 1:
            cueString = 'STABLE ship\nWINDY weather'
        elif thisBlockType == 2:
            cueString = 'UNSTABLE ship\nCALM weather'
        elif thisBlockType == 3:
            cueString = 'UNSTABLE ship\nWINDY weather'
        else:
            cueString = '???'
        cueString = cueString + '\n\n(press the spacebar to start the round)'

        # Make a record of the cue trigger
        trials.addData('cueTrigger', cueTrigger)
      End Routine:
        # Increment total time for this round
        thisTrialTime += t

        # Make a record of the start trigger
        trials.addData('startTrigger', startTrigger)
    ParallelOutComponent cuePPort
      address = 0xD050
      startData = cueTrigger
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.002
      syncScreen = True
      syncScreenRefresh = True
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    TextComponent cueText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cueString
      units = height
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    KeyboardComponent cueResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions1
    ImageComponent coloursImage
      image = images/target-colours.png
      pos = (0.4, -0.3)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent sampleDisp1
      image = images/sample-display-1.png
      pos = (-0.4, -0.3)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent sampleDisp2
      image = images/sample-display-2.png
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instr1Text
      letterHeight = 0.02
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        STEER THE SHIP

        Steer the ship left or right to keep it on course and earn points
        Rounds last one minute - earn more points by steering closer to the target
        At the end of the study, we will will choose five rounds at random and pay you for the best of the five
        Points will be converted to £ at a rate of £0.01 per point
        The maximum points per round is 250
        This means that the largest bonus you can receive is £2.50

        During each round, please keep your eyes on the target - it will change colour depending on how close you are (see below)
        Go too far off course, the ship will crash and the round will end
        To steer left press 'f'
        To steer right press 'j'
        The more often you click a button, the more the ship will steer in that direction

        This study will take no longer than 30 minutes
        There is no audio in the task - feel free to listen to music while you play (optional)

        Press the spacebar to continue
    KeyboardComponent instr1Key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine points
    CodeComponent pointsCode
      Code Type = Auto->JS
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      End Routine:
        # Keep track of total time
        print('points t ' + str(t))
        thisTrialTime += t
        totalExperimentTime += thisTrialTime

        print('maxExperimentTime ' + str(maxExperimentTime))
        print('totalExperimentTime ' + str(totalExperimentTime))
        print('trialLengthSeconds ' + str(trialLengthSeconds))

        # Check to see if experiment is over
        if maxExperimentTime - totalExperimentTime < trialLengthSeconds:
            trials.finished = True
    ParallelOutComponent pointsPort
      address = 0xD050
      startData = pointsTrigger
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.002
      syncScreen = True
      syncScreenRefresh = True
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    TextComponent pointsText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $pointsString
      units = height
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    KeyboardComponent pointsResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine debrief
    CodeComponent debriefCode
      Code Type = Auto->JS
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      Begin Experiment:
        debriefTextString = ''
        bonusPayment = 0
      Begin Routine:
        # Shuffle scores, then pick the best of 5
        print('allScores (pre shuffle)' + str(allScores))
        shuffledScores = myShuffle(allScores)
        print('shuffledScores (post shuffle)' + str(shuffledScores))

        # Truncate
        if len(shuffledScores) > 5:
            shuffledScores = shuffledScores[0:4]

        print('shuffledScores (post truncate)' + str(shuffledScores))
        maxScore = my_max(shuffledScores)
        print('maxScore ' + str(maxScore))
        maxScore = round(maxScore)
        bonusPayment = maxScore/100

        # Add to participant file
        debrief_loop.addData('bonusPayment',bonusPayment)

        debriefTextString = 'End of study - thank you for participating\n\n' + 'Based on your performance, you will receive a bonus payment of £' + str(bonusPayment) + ' once all participants have completed the study.\n\n(press the spacebar to return to Prolific)'
    TextComponent debriefText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $debriefTextString
      units = height
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    KeyboardComponent debriefKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine start
    CodeComponent startCode
      Code Type = Auto->JS
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      Before Experiment:
        # Import statements here?
    TextComponent startText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Waiting for experimenter
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    KeyboardComponent startKeyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine start
  Routine instructions1
  Routine instructions3
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = numBlocks
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    Routine cue
    Routine trial
    Routine feedback
    Routine points
  LoopTerminator trials
